<MorpheusModel version="4">
    <Time>
        <StartTime value="0"/>
        <StopTime value="210000" symbol="stoptime"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="4"/>
    </Time>
    <Description>
        <Title>E03_Oriol</Title>
        <Details></Details>
    </Description>
    <Space>
        <Lattice class="square">
            <Size value="800,800,0" symbol="size"/>
            <Neighborhood>
                <Order>3</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Global>
        <Variable value="0.0" value="1846.2341165" value="1846.2341165" value="1871.5766918" symbol="sum_cell_center_y"/>
        <Variable value="0.0" value="2000.0025033" value="2000.0025033" value="1882.1237373" symbol="sum_cell_center_x"/>
        <Variable value="0.8" value="0.8" value="0.8" value="0.8" symbol="tau"/>
        <Mapper>
            <Input value="cell.center.y"/>
            <Output mapping="sum" symbol-ref="sum_cell_center_y"/>
        </Mapper>
        <Mapper>
            <Input value="cell.center.x"/>
            <Output mapping="sum" symbol-ref="sum_cell_center_x"/>
        </Mapper>
        <Function symbol="mean_center_y" symbol="mean_center_y">
            <Expression>sum_cell_center_y/total_cells</Expression>
        </Function>
        <Function symbol="mean_center_x" symbol="mean_center_x">
            <Expression>sum_cell_center_x/total_cells</Expression>
        </Function>
        <Function symbol="total_cells" symbol="total_cells">
            <Expression>celltype.mantle.size+celltype.hair.size+celltype.sustentacular.size</Expression>
        </Function>
        <Variable value="0.0" value="0" symbol="NumberOfNeighbours"/>
        <Variable value="0.0" value="0" symbol="Sustentacular_Neighbours"/>
        <Variable value="0.0" value="0" symbol="HairCell_Neighbours"/>
        <Variable value="0.0" value="0" symbol="Mantle_Neighbours"/>
        <Variable value="30000" value="30000" value="30000" value="30000" symbol="dia"/>
        <Variable value="0.00015" value="0.00015" value="0.00015" value="0.00015" symbol="ps"/>
        <Variable value="0.0001" value="0.0001" value="0.0001" value="0.0001" symbol="pm"/>
    </Global>
    <CellTypes>
        <CellType class="biological" name="mantle">
            <Property value="2" symbol="c" name="color"/>
            <Property value="1" symbol="umbral"/>
            <CellDivision division-plane="minor">
                <Condition>tau*dia &lt; time and rand_uni(0,1) &lt; pm and Mantle_Neighbours &lt; umbral</Condition>
                <Triggers>
                    <Rule symbol-ref="umbral">
                        <Expression>1</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <NeighborhoodReporter>
                <Input value="cell.type == celltype.mantle.id" scaling="cell"/>
                <Output mapping="sum" symbol-ref="Mantle_Neighbours"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input value="cell.type == celltype.hair.id" scaling="cell"/>
                <Output mapping="sum" symbol-ref="HairCell_Neighbours"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input value="cell.type == celltype.sustentacular.id" scaling="cell"/>
                <Output mapping="sum" symbol-ref="Sustentacular_Neighbours"/>
            </NeighborhoodReporter>
            <Property value="0.0" symbol="Sustentacular_Neighbours"/>
            <Property value="0.0" symbol="Mantle_Neighbours"/>
            <Property value="0.0" symbol="HairCell_Neighbours"/>
            <VolumeConstraint target="1643" strength="time^2/(1000^2+time^2)"/>
            <SurfaceConstraint target="213" strength="1" mode="surface"/>
        </CellType>
        <CellType class="biological" name="sustentacular">
            <Property value="1" symbol="c" name="color"/>
            <ChangeCellType newCellType="hair">
                <Condition>p == 1</Condition>
                <Triggers>
                    <Rule symbol-ref="c">
                        <Expression>0</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <ChangeCellType newCellType="mantle">
                <Condition>p == 2</Condition>
                <Triggers>
                    <Rule symbol-ref="c">
                        <Expression>2</Expression>
                    </Rule>
                    <Rule symbol-ref="umbral">
                        <Expression>1</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <ChangeCellType newCellType="mantle">
                <Condition>p == 3 and s == 1</Condition>
                <Triggers>
                    <Rule symbol-ref="c">
                        <Expression>2</Expression>
                    </Rule>
                    <Rule symbol-ref="umbral">
                        <Expression>1</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <CellDivision division-plane="random">
                <Condition>(tau*dia &lt; time) and (rand_uni(0,1) &lt; ps )and (Sustentacular_Neighbours &lt; umbral) and (r&lt;=a)</Condition>
                <Triggers name="Division Sustentacular center">
                    <Rule symbol-ref="p">
                        <Expression>if(d&lt;0.594,0,1)</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <CellDivision daughterID="daughter" division-plane="random">
                <Condition>(tau*dia &lt; time) and (rand_uni(0,1) &lt; ps ) and (Sustentacular_Neighbours &lt; umbral) and (r>a)</Condition>
                <Triggers>
                    <Rule symbol-ref="s">
                        <Expression>if(daughter == 1, 1, 0 )</Expression>
                    </Rule>
                    <Rule symbol-ref="p">
                        <Expression>if(d &lt; 0.9,0,if((0.9&lt;=d) and (d&lt; 0.95),2,3))</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <Function symbol="r">
                <Expression>sqrt((cell.center.x-mean_center_x)^2+(cell.center.y-mean_center_y)^2)</Expression>
            </Function>
            <Constant value="95 " symbol="a"/>
            <Property value="3" symbol="umbral"/>
            <Property value="0.0" symbol="p"/>
            <Property value="0" symbol="d"/>
            <Property value="0.0" symbol="s"/>
            <Property value="0.0" symbol="HairCell_Neighbours"/>
            <Property value="0.0" symbol="Mantle_Neighbours"/>
            <Property value="0.0" symbol="Sustentacular_Neighbours"/>
            <NeighborhoodReporter>
                <Input value="cell.type == celltype.sustentacular.id" scaling="cell"/>
                <Output mapping="sum" symbol-ref="Sustentacular_Neighbours"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input value="cell.type == celltype.hair.id" scaling="cell"/>
                <Output mapping="sum" symbol-ref="HairCell_Neighbours"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input value="cell.type == celltype.mantle.id" scaling="cell"/>
                <Output mapping="sum" symbol-ref="Mantle_Neighbours"/>
            </NeighborhoodReporter>
            <System time-step="1.0" solver="Runge-Kutta [fixed, O(4)]">
                <Rule symbol-ref="d">
                    <Expression>rand_uni(0,1)</Expression>
                </Rule>
            </System>
            <VolumeConstraint target="1579" strength="time^2/(1000^2+time^2)"/>
            <SurfaceConstraint target="177" strength="1" mode="surface"/>
        </CellType>
        <CellType class="biological" name="hair">
            <Property value="0" symbol="c" name="color"/>
            <VolumeConstraint target="2597" strength="time^2/(1000^2+time^2)"/>
            <SurfaceConstraint target="206" strength="1" mode="surface"/>
        </CellType>
        <CellType class="medium" name="medium">
            <Property value="0.5" symbol="z"/>
            <Property value="0" symbol="count"/>
        </CellType>
    </CellTypes>
    <CPM>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <MetropolisKinetics temperature="10"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </ShapeSurface>
        <Interaction>
            <Contact type1="sustentacular" value="-38" type2="sustentacular"/>
            <Contact type1="sustentacular" value="-36" type2="mantle"/>
            <Contact type1="sustentacular" value="-40" type2="hair"/>
            <Contact type1="sustentacular" value="56" type2="medium"/>
            <Contact type1="hair" value="-60" type2="hair"/>
            <Contact type1="hair" value="5" type2="mantle"/>
            <Contact type1="hair" value="80" type2="medium"/>
            <Contact type1="mantle" value="-45" type2="mantle"/>
            <Contact type1="mantle" value="-10" type2="medium"/>
        </Interaction>
    </CPM>
    <Analysis>
        <Logger time-step="5000" name="number_cell_vs_time">
            <Input>
                <Symbol symbol-ref="cell.type"/>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="HairCell_Neighbours"/>
                <Symbol symbol-ref="Sustentacular_Neighbours"/>
                <Symbol symbol-ref="Mantle_Neighbours"/>
                <!--    <Disabled>
        <Symbol symbol-ref="cell.type"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Symbol symbol-ref="HairCell_Neighbours"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Symbol symbol-ref="Sustentacular_Neighbours"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Symbol symbol-ref="Mantle_Neighbours"/>
    </Disabled>
-->
                <Symbol symbol-ref="celltype.mantle.size"/>
                <Symbol symbol-ref="celltype.sustentacular.size"/>
                <Symbol symbol-ref="celltype.hair.size"/>
                <Symbol symbol-ref="total_cells"/>
                <!--    <Disabled>
        <Symbol symbol-ref="umbral"/>
    </Disabled>
-->
            </Input>
            <Output>
                <TextOutput file-format="csv" file-name="number_cell_vs_time"/>
            </Output>
        </Logger>
    </Analysis>
    <CellPopulations>
        <Population type="mantle" size="0">
            <Cell id="1">
                <PropertyData value="2" symbol-ref="c"/>
                <PropertyData value="1" symbol-ref="umbral"/>
                <PropertyData value="2" symbol-ref="Sustentacular_Neighbours"/>
                <PropertyData value="2" symbol-ref="Mantle_Neighbours"/>
                <PropertyData value="0" symbol-ref="HairCell_Neighbours"/>
                <Center>382.50274223,340.7952468,0</Center>
                <Nodes>365, 322, 0;366, 322, 0;371, 322, 0;372, 322, 0;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0</Nodes>
            </Cell>
            <Cell id="2">
                <PropertyData value="2" symbol-ref="c"/>
                <PropertyData value="1" symbol-ref="umbral"/>
                <PropertyData value="2" symbol-ref="Sustentacular_Neighbours"/>
                <PropertyData value="2" symbol-ref="Mantle_Neighbours"/>
                <PropertyData value="0" symbol-ref="HairCell_Neighbours"/>
                <Center>342.24150485,389.27063107,0</Center>
                <Nodes>338, 349, 0;336, 350, 0;337, 350, 0;338, 350, 0;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0</Nodes>
            </Cell>
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        </Population>
        <Population type="sustentacular" size="0">
            <Cell id="4">
                <PropertyData value="1" symbol-ref="c"/>
                <PropertyData value="3" symbol-ref="umbral"/>
                <PropertyData value="0" symbol-ref="p"/>
                <PropertyData value="0.15895831093" symbol-ref="d"/>
                <PropertyData value="0" symbol-ref="s"/>
                <PropertyData value="0" symbol-ref="HairCell_Neighbours"/>
                <PropertyData value="2" symbol-ref="Mantle_Neighbours"/>
                <PropertyData value="1" symbol-ref="Sustentacular_Neighbours"/>
                <Center>358.91006966,364.19252692,0</Center>
                <Nodes>362, 340, 0;362, 341, 0;363, 341, 0;359, 342, 0;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0</Nodes>
            </Cell>
            <Cell id="5">
                <PropertyData value="1" symbol-ref="c"/>
                <PropertyData value="3" symbol-ref="umbral"/>
                <PropertyData value="0" symbol-ref="p"/>
                <PropertyData value="0.21720861635" symbol-ref="d"/>
                <PropertyData value="0" symbol-ref="s"/>
                <PropertyData value="0" symbol-ref="HairCell_Neighbours"/>
                <PropertyData value="3" symbol-ref="Mantle_Neighbours"/>
                <PropertyData value="1" symbol-ref="Sustentacular_Neighbours"/>
                <Center>387.71166033,382.18377693,0</Center>
                <Nodes>393, 357, 0;394, 357, 0;395, 357, 0;396, 357, 0;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0</Nodes>
            </Cell>
        </Population>
        <Population type="hair" size="0"/>
        <Population type="medium" size="0">
            <Cell id="0">
                <PropertyData value="0.5" symbol-ref="z"/>
                <PropertyData value="0" symbol-ref="count"/>
                <Nodes></Nodes>
            </Cell>
        </Population>
    </CellPopulations>
</MorpheusModel>
